---
API: 2.1
OpenSesame: 3.3.14
Platform: nt
---
set width 1024
set uniform_coordinates yes
set title "lexsync: en_priming_jitter (english)"
set subject_nr 0
set start lexsync_experiment
set sound_sample_size -16
set sound_freq 48000
set sound_channels 2
set sound_buf_size 1024
set sampler_backend legacy
set round_decimals 2
set mouse_backend legacy
set keyboard_backend legacy
set height 768
set fullscreen no
set foreground white
set font_size 32
set font_family mono
set description "Generated by lexsync"
set coordinates uniform
set compensation 0
set color_backend legacy
set clock_backend legacy
set canvas_backend xpyriment
set background black

define inline_script lexsync_trigger_setup
	set description "Load the trial texts and open the trigger device with a test-mode fallback"
	set _run ""
	___prepare__
	import csv as _csv
	with open(pool[u'en_priming_jitter_english_list2_opensesame_text.csv'], encoding=u'utf-8-sig', newline=u'') as _f:
	    _LEXSYNC_ROWS = {int(_r[u'lexsync_row']): _r for _r in _csv.DictReader(_f)}
	def _lexsync_row():
	    return _LEXSYNC_ROWS[int(var.get(u'lexsync_row', _eval=False))]
	var.trigger_backend = u'parallel'
	var.parallel_port_address = 0x0378
	var.test_mode = u'no'
	import time
	def _printer(code):
	    print(u'[lexsync test trigger] %d' % int(code))
	    time.sleep(0.01)
	    print(u'[lexsync test trigger] 0')
	send_trigger = _printer
	try:
	    if var.trigger_backend == u'serial':
	        import serial
	        import serial.tools.list_ports
	        _ports = serial.tools.list_ports.comports()
	        if _ports:
	            _sp = serial.Serial(_ports[0].device)
	            def send_trigger(code):
	                _sp.write(int(code).to_bytes(1, 'big'))
	                time.sleep(0.01)
	                _sp.write((0).to_bytes(1, 'big'))
	        else:
	            var.test_mode = u'yes'
	    else:
	        from ctypes import windll
	        _io = windll.dlportio
	        _addr = int(var.parallel_port_address)
	        def send_trigger(code):
	            _io.DlPortWritePortUchar(_addr, int(code))
	            time.sleep(0.01)
	            _io.DlPortWritePortUchar(_addr, 0)
	except Exception as _exc:
	    var.test_mode = u'yes'
	    print(u'lexsync: trigger device unavailable; test mode.')
	send_trigger(0)
	__end__

define inline_script lexsync_version_check
	set description "Warn when the subject number belongs to another version"
	set _prepare ""
	___run__
	_version = 2
	_versions = 2
	try:
	    _p = int(var.get(u'subject_nr', 0, _eval=False))
	except (TypeError, ValueError):
	    _p = 0
	_expected = (_p - 1) % _versions + 1
	if _expected != _version:
	    c = Canvas()
	    c.text(u'Participant %d would normally run version %d, and this file runs version %d. Press space to continue with this one or escape to stop.' % (_p, _expected, _version))
	    c.show()
	    _key, _t = Keyboard(keylist=[u'space', u'escape'], timeout=None).get_key()
	    if _key == u'escape':
	        raise RuntimeError(u'lexsync: stopped at the version check, because participant %d would normally run version %d.' % (_p, _expected))
	__end__

define inline_script lexsync_instructions
	set description "Show the instructions and wait for the space bar"
	set _prepare ""
	___run__
	c = Canvas()
	c.text(u'When a response is needed, press the left arrow key or the right arrow key. Respond as quickly and accurately as you can.<br /><br />Press the space bar to begin.')
	c.show()
	_key, _t = Keyboard(keylist=[u'space', u'escape'], timeout=None).get_key()
	if _key == u'escape':
	    raise RuntimeError(u'lexsync: stopped at the instructions.')
	__end__

define inline_script lexsync_trial_start
	set description "Clear the previous trial's responses"
	set _prepare ""
	___run__
	var.response = u''
	var.response_time = u''
	var.timed_out = u''
	var.correct = u''
	var.question_response = u''
	var.question_rt = u''
	var.lexsync_region_rts = u''
	__end__

define inline_script lexsync_e0
	set description "Show stimulus and send onset-aligned trigger"
	set _prepare ""
	___run__
	c = Canvas()
	c.text(u'+')
	var.onset_time = c.show()
	clock.sleep(500)
	__end__

define inline_script lexsync_e1
	set description "Show stimulus and send onset-aligned trigger"
	set _prepare ""
	___run__
	c = Canvas()
	c.text(_lexsync_row()[u'prime'])
	var.onset_time = c.show()
	send_trigger(20)
	clock.sleep(int(float(var.get(u'prime_ms', _eval=False))))
	__end__

define inline_script lexsync_e2
	set description "Show stimulus and send onset-aligned trigger"
	set _prepare ""
	___run__
	c = Canvas()
	c.text(u'#####')
	var.onset_time = c.show()
	clock.sleep(33)
	__end__

define inline_script lexsync_e3
	set description "Show the stimulus and collect the response from its onset"
	set _prepare ""
	___run__
	c = Canvas()
	c.text(_lexsync_row()[u'target'])
	_t0 = c.show()
	var.onset_time = _t0
	send_trigger(int(var.get(u'condition_trigger', _eval=False)))
	_kb = Keyboard(keylist=[u'left', u'right'])
	_kb.flush()
	_key, _t = _kb.get_key(timeout=800)
	if _key is None:
	    c = Canvas()
	    c.show()
	    _key, _t = _kb.get_key(timeout=2000)
	var.response = _key
	var.response_time = u'' if _key is None else _t - _t0
	var.timed_out = 1 if _key is None else 0
	_want = str(_lexsync_row().get(u'answer', u'')).strip()
	_got = u'' if _key is None else str(_key).strip()
	var.correct = (1 if _got == _want else 0) if _want else u''
	__end__

define inline_script lexsync_e4
	set description "Show stimulus and send onset-aligned trigger"
	set _prepare ""
	___run__
	c = Canvas()
	var.onset_time = c.show()
	clock.sleep(int(float(var.get(u'iti_ms', _eval=False))))
	__end__

define inline_script lexsync_record
	set description "Copy the trial's labels for the logger"
	set _prepare ""
	___run__
	_row = _lexsync_row()
	var.lexsync_condition = _row.get(u'condition', u'')
	var.lexsync_block = _row.get(u'block', u'')
	var.lexsync_answer = _row.get(u'answer', u'')
	__end__

define logger lexsync_logger
	set description "Log the trial"
	set auto_log yes

define sequence lexsync_trial
	set flush_keyboard yes
	set description "One trial: the paradigm event sequence"
	run lexsync_trial_start always
	run lexsync_e0 always
	run lexsync_e1 always
	run lexsync_e2 always
	run lexsync_e3 always
	run lexsync_e4 always
	run lexsync_record always
	run lexsync_logger always

define loop lexsync_loop
	set source_file "en_priming_jitter_english_list2_opensesame.csv"
	set source file
	set repeat 1
	set order sequential
	set description "Present each item once"
	run lexsync_trial

define sequence lexsync_experiment
	set flush_keyboard yes
	set description "Top-level experiment sequence"
	run lexsync_trigger_setup always
	run lexsync_version_check always
	run lexsync_instructions always
	run lexsync_loop always

