---
API: 2.1
OpenSesame: 3.3.14
Platform: nt
---
set width 1024
set uniform_coordinates yes
set title "lexsync: en_spr (english)"
set subject_nr 0
set start lexsync_experiment
set sound_sample_size -16
set sound_freq 48000
set sound_channels 2
set sound_buf_size 1024
set sampler_backend legacy
set round_decimals 2
set mouse_backend legacy
set keyboard_backend legacy
set height 768
set fullscreen no
set foreground white
set font_size 32
set font_family mono
set description "Generated by lexsync"
set coordinates uniform
set compensation 0
set color_backend legacy
set clock_backend legacy
set canvas_backend xpyriment
set background black

define inline_script lexsync_trigger_setup
	set description "Open the trigger device with a test-mode fallback"
	set _run ""
	___prepare__
	var.trigger_backend = u'parallel'
	var.parallel_port_address = 0x0378
	var.test_mode = u'no'
	import time
	def _printer(code):
	    print(u'[lexsync test trigger] %d' % int(code))
	    time.sleep(0.01)
	    print(u'[lexsync test trigger] 0')
	send_trigger = _printer
	try:
	    if var.trigger_backend == u'serial':
	        import serial
	        import serial.tools.list_ports
	        _ports = serial.tools.list_ports.comports()
	        if _ports:
	            _sp = serial.Serial(_ports[0].device)
	            def send_trigger(code):
	                _sp.write(int(code).to_bytes(1, 'big'))
	                time.sleep(0.01)
	                _sp.write((0).to_bytes(1, 'big'))
	        else:
	            var.test_mode = u'yes'
	    else:
	        from ctypes import windll
	        _io = windll.dlportio
	        _addr = int(var.parallel_port_address)
	        def send_trigger(code):
	            _io.DlPortWritePortUchar(_addr, int(code))
	            time.sleep(0.01)
	            _io.DlPortWritePortUchar(_addr, 0)
	except Exception as _exc:
	    var.test_mode = u'yes'
	    print(u'lexsync: trigger device unavailable; test mode.')
	send_trigger(0)
	__end__

define inline_script lexsync_e0
	set description "Show stimulus and send onset-aligned trigger"
	set _prepare ""
	___run__
	c = Canvas()
	c.text(u'+')
	var.onset_time = c.show()
	clock.sleep(500)
	__end__

define inline_script lexsync_e1
	set description "Self-paced reading region by region"
	set _prepare ""
	___run__
	_regions = [r for r in var.sentence.split(u'|') if r != u'']
	_crit = int(var.critical_region) if var.get(u'critical_region') is not None else 0
	_kb = Keyboard(keylist=[u'space'], timeout=None)
	for _i, _region in enumerate(_regions, start=1):
	    c = Canvas(); c.text(_region); c.show()
	    if _i == _crit: send_trigger(var.condition_trigger)
	    _kb.get_key()
	__end__

define inline_script lexsync_e2
	set description "Comprehension question"
	set _prepare ""
	___run__
	c = Canvas(); c.text(var.question); c.show()
	_kb = Keyboard(keylist=[u'f', u'j'], timeout=5000)
	var.response, var.response_time = _kb.get_key()
	__end__

define inline_script lexsync_e3
	set description "Show stimulus and send onset-aligned trigger"
	set _prepare ""
	___run__
	c = Canvas()
	var.onset_time = c.show()
	clock.sleep(250)
	__end__

define sequence lexsync_trial
	set flush_keyboard yes
	set description "One trial: the paradigm event sequence"
	run lexsync_e0 always
	run lexsync_e1 always
	run lexsync_e2 always
	run lexsync_e3 always

define loop lexsync_loop
	set source_file "en_spr_english_opensesame.csv"
	set source file
	set repeat 1
	set order sequential
	set description "Present each item once"
	run lexsync_trial

define sequence lexsync_experiment
	set flush_keyboard yes
	set description "Top-level experiment sequence"
	run lexsync_trigger_setup always
	run lexsync_loop always

